# Generated by Configurator on Tue Mar 03 08:48:13 PST 2015

# Reset
Property,Core,Initialize,0

# Devices
Device,/dev/ttyUSB0,SerialManager,/dev/ttyUSB0
Device,DHub,ShapeokoTinyG,DHub
Device,DXYStage,ShapeokoTinyG,DXYStage

# Pre-init settings for devices
Property,DHub,Port,/dev/ttyUSB0

# Pre-init settings for COM ports
Property,/dev/ttyUSB0,AnswerTimeout,500.0000
Property,/dev/ttyUSB0,BaudRate,115200
Property,/dev/ttyUSB0,DelayBetweenCharsMs,0.0000
Property,/dev/ttyUSB0,Handshaking,Off
Property,/dev/ttyUSB0,Parity,None
Property,/dev/ttyUSB0,StopBits,1
Property,/dev/ttyUSB0,Verbose,1

# Hub (parent) references
Parent,DXYStage,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

